PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[.8,.8,.8]
  expName = mf_amp
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Routines
  Routine trial_2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $category
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Py
  Routine break_3
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Moving on...
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  Routine AMP_non_word
  Routine AMP_nonword
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text [set every repeat] = $word
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    KeyboardComponent resp_1
      allowedKeys = 'left','right',"escape","n"
      correctAns = $correct_amp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        AMP_nonword_select.finished = True
      End Routine:
        if "n" in resp_1.keys:
            continueRoutine = False
            AMP_nonword_select.finished = True
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 3.25
      text [set every repeat] = $mask
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  Routine AMP_word
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      text [set every repeat] = $word
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = .125
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import random

        # categorizing the words in the list

        full_list = list(range(0,341))
        care_virtue = list(range(0,12))
        care_vice = list(range(12,24))
        fair_virtue = list(range(24,36))
        fair_vice = list(range(36,48))
        loyal_virtue = list(range(48,60))
        loyal_vice = list(range(60,72))
        auth_virtue = list(range(72,84))
        auth_vice = list(range(84,96))
        sanc_virtue = list(range(96,108))
        sanc_vice = list(range(108,120))
        neutral = list(range(120,170))
        nonword = list(range(170,340))
        control = [340,341]

        # pulling out the words that will go in the AMP

        care_virtue_amp = random.sample(care_virtue, 7)
        care_vice_amp = random.sample(care_vice, 7)
        fair_virtue_amp = random.sample(fair_virtue, 7)
        fair_vice_amp = random.sample(fair_vice, 7)
        loyal_virtue_amp = random.sample(loyal_virtue, 7)
        loyal_vice_amp = random.sample(loyal_vice, 7)
        auth_virtue_amp = random.sample(auth_virtue, 7)
        auth_vice_amp = random.sample(auth_vice, 7)
        sanc_virtue_amp = random.sample(sanc_virtue, 7)
        sanc_vice_amp = random.sample(sanc_vice, 7)
        nonword_amp = random.sample(nonword, 70)
        control_amp = control

        AMP_words = care_virtue_amp + care_vice_amp + fair_virtue_amp + fair_vice_amp + loyal_virtue_amp + loyal_vice_amp + auth_virtue_amp + auth_vice_amp + sanc_virtue_amp + sanc_vice_amp + control_amp

        # pulling out the words that will go in the LDT

        care_virtue_LDT = list(set(care_virtue).difference(care_virtue_amp))
        care_vice_LDT = list(set(care_vice).difference(care_vice_amp))
        fair_virtue_LDT = list(set(fair_virtue).difference(fair_virtue_amp))
        fair_vice_LDT = list(set(fair_vice).difference(fair_vice_amp))
        loyal_virtue_LDT = list(set(loyal_virtue).difference(loyal_virtue_amp))
        loyal_vice_LDT = list(set(loyal_vice).difference(loyal_vice_amp))
        auth_virtue_LDT = list(set(auth_virtue).difference(auth_virtue_amp))
        auth_vice_LDT = list(set(auth_vice).difference(auth_vice_amp))
        sanc_virtue_LDT = list(set(sanc_virtue).difference(sanc_virtue_amp))
        sanc_vice_LDT = list(set(sanc_vice).difference(sanc_vice_amp))
        nonword_LDT = list(set(nonword).difference(nonword_amp))
        neutral_LDT = neutral

        LDT_words = care_virtue_LDT + care_vice_LDT + fair_virtue_LDT + fair_vice_LDT + loyal_virtue_LDT + loyal_vice_LDT + auth_virtue_LDT + auth_vice_LDT + sanc_virtue_LDT + sanc_vice_LDT + nonword_LDT + neutral_LDT
      Begin Routine:
        AMP_word_select.finished = True
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator AMP_word_select loopType="TrialHandler"
      Selected rows = $AMP_words
      conditionsFile = words4exp.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('word', 'care'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'help'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'health'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'good'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'peace'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&')]),
        OrderedDict([('word', 'safe'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'compassion'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&&&&')]),
        OrderedDict([('word', 'safety'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'improve'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&')]),
        OrderedDict([('word', 'growth'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'increase'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&&')])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
      Routine AMP_word
    LoopTerminator AMP_word_select
    LoopInitiator AMP_nonword_select loopType="TrialHandler"
      Selected rows = $nonword_amp
      conditionsFile = words4exp.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('word', 'care'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'help'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'health'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'good'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'peace'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&')]),
        OrderedDict([('word', 'safe'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&')]),
        OrderedDict([('word', 'compassion'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&&&&')]),
        OrderedDict([('word', 'safety'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'improve'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&')]),
        OrderedDict([('word', 'growth'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&')]),
        OrderedDict([('word', 'increase'), ('category', 'care.virtue'), ('correct_amp', 'left'), ('correct_ldt', 'left'), ('mask', '&&&&&&&&')])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
      Routine AMP_nonword
    LoopTerminator AMP_nonword_select
  LoopTerminator trials
  Routine break_3
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $indices_b
    conditionsFile = words.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'paint brush'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'red fox'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'volley ball'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'plate'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'puma'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lantern'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'daisy'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'notebook'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'flash light'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'barrel'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'ping pong paddle'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'tent'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'antelope'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'apple'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'lemon'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'hat'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'desktop computer'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'sun glasses'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'drying machine'), ('corr_ans', 'left')]),
      OrderedDict([('word', 'egg'), ('corr_ans', 'left')])]
    Routine trial_2
  LoopTerminator trials_2
